CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>[^_]+)_(?P<Group>[^_]+)_(?P<Magnification>[^_]+)_(?P<ROI_number>\d+)_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '-', "Load the color image by matching files in the folder against the text ‘.JPG'"]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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "tif")
    Name to assign these images:Original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Group

ColorToGray:[module_num:5|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notes:['Split the channels to individual grayscale images']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
    Select the input image:Original
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ImageMath:[module_num:6|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notes:['Invert the green channel image']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0
    Set values less than 0 equal to 0?:
    Set values greater than 1 equal to 1?:
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedGreen
    Image or measurement?:Image
    Select the first image:OrigGreen
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the individual muscle fibers. Robustbackground thresholding works well. Some adjustment of the correction factor, smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:InvertedGreen
    Name the primary objects to be identified:Muscle
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:8|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notes:['Measure the size and shape of muscle fibers']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
    Select object sets to measure:Muscle
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Muscle
    Name the output objects:ShrunkMuscle
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:7
    Fill holes in objects so that all objects shrink to a single point?:No
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
OverlayOutlines:[module_num:10|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notes:['Overlay the muscle outlines in the inverted image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGreen
    Name the output image:GreenOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ShrunkMuscle

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:GreenOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_green_outlines
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:12|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notes:['Identify the individual nuclei. Three-class thresholding works better than the default two-class method. Some adjustment of the correction factor, smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:13|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No
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
OverlayOutlines:[module_num:14|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notes:['Overlay the cell outlines in the inverted image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigBlue
    Name the output image:BlueOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Nuclei

RelateObjects:[module_num:15|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notes:['Identify the central nucleated fibers by relating the nuclei objects in shrunk muscle fibers']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
    Parent objects:ShrunkMuscle
    Child objects:ShrunkenNuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
ClassifyObjects:[module_num:16|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notes:['Classify the muscle fibers with or without central nuclei']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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:ShrunkMuscle
    Select the measurement to classify by:Children_ShrunkenNuclei_Count
    Select bin spacing:Custom-defined bins
    Number of bins:1
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Normal,CNF
    Retain an image of the classified objects?:Yes
    Name the output image:ClassifiedMuscle
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Output Folder|None
    Rules or classifier file name:None
    Allow fuzzy feature matching?:No

OverlayOutlines:[module_num:17|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notes:['Overlay the central nucleated muscle outlines in the inverted image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ClassifiedMuscle
    Name the output image:CNFOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ShrunkMuscle
    Select outline color:Green
    Select objects to display:Nuclei

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:CNFOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CNFOverlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:19|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notes:["Save the output image as an 8-bit TIF, appending the text ‘_CNF' to the original filename of the color image."]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
    Select the type of image to save:Image
    Select the image to save:ClassifiedMuscle
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CNF
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:20|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the cell objects and the image will be saved to separate .csv files. Mean per-image cell measurements will also be exported to the image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|L:\\\\Surgery\\\\Research\\\\Han Lab\\\\Yeh Siang\\\\cell profiler manuscript\\\\mdx asc emyhc 31August2017
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ShrunkMuscle|Classify_CNF,ShrunkMuscle|Classify_Normal,Muscle|AreaShape_Area,Muscle|AreaShape_MinFeretDiameter
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Muscle
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ShrunkMuscle
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
